PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {'participant':'', 'session':'01'}
  Units = norm
  Save excel file = True
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = emo_stroop
  logging level = warning
  Screen = 1
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Routines
  Routine feedback
    CodeComponent message
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if resp.corr:#stored on last run routine
          msg=u"¡Correcto!"
        else:
          msg=u"¡Error!"
    TextComponent feedback_2
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine set_block
    CodeComponent code
      Begin Experiment:
        import random
        blocks = ["1:9", "10:18"]
        c = 0
      Begin Routine:
        random.shuffle(blocks)
        condsFileToUse = blocks.pop()
        print condsFileToUse
        print c + 1
  Routine trial
    TextComponent word
      color [set every repeat] = $letterColor
      text [set every repeat] = $text
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 0.5
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  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        ¿Listo para comenzar el experimento real?

        Recuerda, ignora la palabra en sí misma.

        Presiona:
        Izquierda para letras rojas
        Abajo para letras verdes
        Derecha para letras azules

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      font = arial
      letterHeight = 0.1
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      text:
        ¡Completaste el experimento!

        ¡Muchas gracias!
  Routine feedback_4
  Routine instructPractice
    TextComponent instr1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Recuerda, ignora la palabra.

        Presiona:
        Izquierda para letras rojas
        Abajo para letras verdes
        Derecha para letras azules

        Vamos a comenzar con unos ejercicios de práctica

        Presiona cualquier tecla para comenzar
    KeyboardComponent ready1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructPractice
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = practice_trials.csv
    loopType = random
    nReps = 1
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    Routine trial
    Routine feedback
  LoopTerminator practice
  Routine instruct
  LoopInitiator trial_blocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine set_block
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = exp_trials.csv
      loopType = random
      nReps = 1
      endPoints = [1, 2]
      Selected rows = $condsFileToUse
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      conditions:
        [{'text': u'positiva1', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'positive'},
        {'text': u'negativa1', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'negative'},
        {'text': u'neutral1', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'neutral'},
        {'text': u'positiva2', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'positive'},
        {'text': u'negativa2', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'negative'},
        {'text': u'neutral2', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'neutral'},
        {'text': u'positiva3', 'letterColor': u'red', 'corrAns': u'left', 'condition': u'positive'},
        {'text': u'negativa3', 'letterColor': u'red', 'corrAns': u'left', 'condition': u'negative'},
        {'text': u'neutral3', 'letterColor': u'red', 'corrAns': u'left', 'condition': u'neutral'},
        {'text': u'positiva4', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'positive'},
        {'text': u'negativa4', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'negative'},
        {'text': u'neutral4', 'letterColor': u'blue', 'corrAns': u'right', 'condition': u'neutral'},
        {'text': u'positiva5', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'positive'},
        {'text': u'negativa5', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'negative'},
        {'text': u'neutral5', 'letterColor': u'green', 'corrAns': u'down', 'condition': u'neutral'},
        {'text': u'positiva6', 'letterColor': u'red', 'corrAns': u'left', 'condition': u'positive'}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
      Routine trial
    LoopTerminator trials
  LoopTerminator trial_blocks
  Routine thanks
